PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = piloto1
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Routines
  Routine grave
    SoundComponent Sonido
      sound [set every repeat] = $Hertz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      volume [set every repeat] = $volumen
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    ImageComponent image_2
      image [set every repeat] = $Imagenes
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = ("0","1000","2000","3000","4000","5000")
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        nuestro_slider=[]
      Begin JS Experiment:
        var nuestro_slider;
        nuestro_slider = [];
      End JS Routine:
        var nuestro_slider, slider_2
        nuestro_slider.push(slider_2.getRating());
      End Routine:
        nuestro_slider.append(slider_2.getRating())
  Routine agudo
    SoundComponent sound_1
      hamming = False
      sound [set every repeat] = $Hertz
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      volume [set every repeat] = $volumen
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    ImageComponent image
      image = a.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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    SliderComponent slider
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 0
      labels = (0, 500, 1000, 1500, 2000)
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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  Routine Instrucciones
    SoundComponent sound_3
      sound = instr.ogg
      startVal [time (s)] = 0.0
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  Routine var_3
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        console.log(nuestro_slider.length);
      Begin Routine:
        print(len(nuestro_slider))
  Routine Pago2
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_sujeto, n_precio_sujeto, precio_sujeto, precio_sujeto_pos;
        n_precio_sujeto = Math.random();
        precio_sujeto_pos = Math.round((n_precio_sujeto * nuestro_slider.length));
        precio_sujeto = Number.parseInt(Math.round((nuestro_slider[precio_sujeto_pos] * 1000)));
        mensaje_precio_sujeto = `El precio seleccionado aleatoriamente es ${precio_sujeto}.`;
      Begin Routine:
        import random
        n_precio_sujeto=random.random()
        precio_sujeto_pos=round(n_precio_sujeto*len(nuestro_slider))
        precio_sujeto=int(round(nuestro_slider[precio_sujeto_pos]*1000))
        mensaje_precio_sujeto = f"El precio seleccionado aleatoriamente es {precio_sujeto}."
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $mensaje_precio_sujeto
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  Routine Pago1
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        var mensaje_precio_aleatorio, n_precio_aleatorio, precio_aleatorio;
        n_precio_aleatorio = Math.random();
        precio_aleatorio = Math.round((n_precio_aleatorio * 5000));
        mensaje_precio_aleatorio = `El número aleatorio es ${precio_aleatorio}.`;
      Begin Routine:
        import random
        n_precio_aleatorio = random.random()
        precio_aleatorio= round(n_precio_aleatorio*5000)
        mensaje_precio_aleatorio = f"El número aleatorio es {precio_aleatorio}."
    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $mensaje_precio_aleatorio
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  Routine Final
Flow
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ruidos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Hertz', 400), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1500), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.05)]),
      OrderedDict([('Hertz', 1000), ('volumen', 0.0)])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = imagenes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Imagenes', 'Alpinito.jpg')]),
        OrderedDict([('Imagenes', 'Banano.jpeg')]),
        OrderedDict([('Imagenes', 'bon-bon-bun.jpg')]),
        OrderedDict([('Imagenes', 'Brownie.jpg')]),
        OrderedDict([('Imagenes', 'Chocoramo.jfif.jpg')]),
        OrderedDict([('Imagenes', 'Croissant.jpg')]),
        OrderedDict([('Imagenes', 'Galletas Tosh.jpg')]),
        OrderedDict([('Imagenes', 'Galletas-festival.jpg')]),
        OrderedDict([('Imagenes', 'Kiwi.jpg')]),
        OrderedDict([('Imagenes', 'Leche-de-almendras.jpg')]),
        OrderedDict([('Imagenes', 'Mango.jpeg')]),
        OrderedDict([('Imagenes', 'Manzana.jpg')]),
        OrderedDict([('Imagenes', 'Nutella (1).jpg')]),
        OrderedDict([('Imagenes', 'Papas-naturales.jpg')]),
        OrderedDict([('Imagenes', 'Papas-limon.jpg')]),
        OrderedDict([('Imagenes', 'Papas-pollo.jpg')]),
        OrderedDict([('Imagenes', 'Popetas.jpg')]),
        OrderedDict([('Imagenes', 'Rosquitas (1).jpg')]),
        OrderedDict([('Imagenes', 'Yogurt-alpina.jpg')]),
        OrderedDict([('Imagenes', 'Uvas.jpg')])]
      Routine grave
    LoopTerminator trials_2
  LoopTerminator trials
  Routine Pago1
  Routine Pago2
